PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new2
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Routines
  Routine Welcome
    TextComponent welcome_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = توضیحات و سلام
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    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Prime
    CodeComponent choosing_blocks
      Code Type = Py
      Begin Experiment:
        image_blocks = ['NegBlock.xlsx', 'NeuBlock.xlsx', 'PosBlock.xlsx']
        shuffle(image_blocks) # randomise order
    CodeComponent choosing_pics
      Code Type = Py
      Begin Experiment:
        import pandas as pd

        file_rows = {} # a dictionary to hold all three row orders
        pic_num = 2
        block_num = 3
        blocks_len= len(pd.read_csv("PosBlock.csv"))
        for file_number in range(block_num):
            row_order = list(range(blocks_len))
            shuffle(row_order)          # randomise the order
            file_rows[file_number] = row_order # store it
    PolygonComponent stim_frame_valence
      fillColor = black
      lineColor = black
      pos = (0, 160)
      shape = rectangle
      size = (500,400)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent stim_image_valence
      image [set every repeat] = $stimFile
      pos = (0,160)
      size = (450, 350)
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent valence_rating
      forceEndRoutine = True
      high = +4
      low = -4
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = احساس شما نسبت به این تصویر چگونه است؟
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  Routine Blank
    PolygonComponent blank_frame
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1366, 768)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
      units = pix
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  Routine Test
    PolygonComponent text_frame
      fillColor = gray
      lineColor = black
      lineWidth = 5
      pos = (0,100)
      shape = rectangle
      size = (1050, 350)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_image
      image [set every repeat] = $Statements
      pos = (0, 0.3)
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like_image
      image = like.png
      pos = like_p
      size = (160,160)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share_image
      image = share.png
      pos = share_p
      size = (160, 160)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike_image
      image = likegf.png
      pos = dislike_p
      size = (160, 160)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent pass_image
      image = pass.png
      pos = pass_p
      size = (160, 160)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent response
      clickable = like_image,share_image,dislike_image,pass_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Rest
    CodeComponent choosing_Q
      Code Type = Py
    CodeComponent questionair
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        question_text.alignHoriz ='left'
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return' and len(inputText) > 1:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif theseKeys[i] == 'period':
                inputText = inputText + "."
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent question_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      text [set every frame] = $(word + '\n' + inputText)
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    KeyboardComponent answers
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Prime_a
    CodeComponent chossing_pics2
      Code Type = Py
    PolygonComponent stim_frame_arousal
      fillColor = black
      lineColor = black
      pos = (0, 160)
      shape = rectangle
      size = (500,400)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent stim_image_arousal
      image [set every repeat] = $stimFile
      pos = (0, 160)
      size = (450, 350)
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent arousal_rating
      forceEndRoutine = True
      high = +4
      low = -4
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message2
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = انگیختگی شما نسبت به این تصویر چگونه است؟
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  Routine Blank2
    PolygonComponent blank_frame2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1366, 768)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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  Routine Test_accuracy
    CodeComponent choosing_news2
      Code Type = Py
    PolygonComponent text_frame2
      fillColor = gray
      lineColor = black
      pos = (0, 100)
      shape = rectangle
      size = (1050, 350)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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    RatingScaleComponent validity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message3
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = تا چه میزان از صحت و اعتبار این متن اطمینان دارید؟
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  Routine Thanks
    TextComponent thanks_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = دست شما درد نکنه
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  Routine code_positions
    CodeComponent positions
      Code Type = Py
      Begin Experiment:
        # set_positions()
        # Positions used during the experiment
        # Position variables end with _p.
        def set_positions():
          global share_p # position of the share icon.
          global like_p # position of the like icon.
          global dislike_p # position of the dislike icon.
          global pass_p # position of the pass icon.
          global text_p #position of the text news

          delta_x, delta_y = win.size/4
          quarter_centers = [ [-delta_x, +delta_y], [+delta_x, +delta_y], [+delta_x, -delta_y], [-delta_x, -delta_y] ]
            #centers when window is quartered.
          half_centers = [ [0 , +delta_y], [0, -delta_y] ] #centers when window is halved.
          text_p = half_centers[0]

          icon_dist = win.size[0]/9
          icon_centers = np.array([icon_dist, 0])
          share_p = np.array( quarter_centers[3] ) + icon_centers
          like_p = np.array( quarter_centers[2]) + icon_centers
          dislike_p = np.array( quarter_centers[3]) - icon_centers
          pass_p = np.array( quarter_centers[2]) - icon_centers
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        set_positions()
  Routine description1
    TextComponent description_next_phase
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = توضیحات
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    KeyboardComponent resp_next_phase
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine statement_selection_code
    CodeComponent statement_selection
      Code Type = Py
      Begin Experiment:
        import random
        block_num = 3
        statement_per_block = 4
        #sample_num = int((block_num*statement_per_block)/2)
        request_num = int(statement_per_block/2)

        news = pd.read_csv("news-statements.csv")
        news["displayed_yet"] = 0
        not_displayed_news = news.loc[news["displayed_yet"]== 0] #creating a new dataframe
        overall_selected_statements = {}
        #np.zeros((block_num , statement_per_block), dtype = str)
        for i in range(block_num):
            not_displayed_news = news.loc[news["displayed_yet"]== 0]
            selected_statements = not_displayed_news.groupby("Accuracy").sample(n= request_num)
            selected_ids = selected_statements.index
            news.at[selected_ids,"displayed_yet"] = 1
            print(news)
            #selected_statements_array = np.array(selected_statements["Statements"])
            #selected_statements_array = np.random.permutation(selected_statements_array)
            #overall_selected_statements[i] = selected_statements_array
            selected_statements_list = list(selected_ids)
            random.shuffle(selected_statements_list)
            print(selected_statements_list)
            overall_selected_statements[i] = selected_statements_list
Flow
  Routine code_positions
  Routine Welcome
  LoopInitiator conditionSelectLoop loopType="TrialHandler"
    conditionsFile = chooseBlocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.xlsx'), ('textFile', 'News.xlsx')]),
      OrderedDict([('condsFile', 'NeuBlock.xlsx'), ('textFile', 'News.xlsx')]),
      OrderedDict([('condsFile', 'PosBlock.xlsx'), ('textFile', 'News.xlsx')])]
    LoopInitiator blocks loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $file_rows[conditionSelectLoop.thisN][(blocks.thisN *( pic_num)): ((blocks.thisN + 1) * ( pic_num))]
        conditionsFile = $image_blocks.pop()
        loopType = random
        nReps = 1
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        Routine Prime
        Routine Blank
      LoopTerminator trials
      LoopInitiator trials_2 loopType="TrialHandler"
        Selected rows = $overall_selected_statements[conditionSelectLoop.thisN][(blocks.thisN *( statement_per_block)): ((blocks.thisN + 1) * ( statement_per_block))]
        conditionsFile = news-statements.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Statements', 'News/F-1.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-2.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-3.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-4.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-5.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-6.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-7.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-8.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/T-1.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-2.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-3.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-4.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-5.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-6.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-7.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-8.png'), ('Accuracy', 1)])]
        Routine statement_selection_code
        Routine Test
      LoopTerminator trials_2
      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = textInputTest.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('word', 'جنسیت')]),
          OrderedDict([('word', 'سن')]),
          OrderedDict([('word', 'تحصیلات')]),
          OrderedDict([('word', 'گرایش سیاسی')]),
          OrderedDict([('word', 'گرایش مذهبی')]),
          OrderedDict([('word', 'در فضای مجازی فعالبت دارید؟')]),
          OrderedDict([('word', 'چند ساعت در روز؟')]),
          OrderedDict([('word', 'چند تا فالوئینگ؟')]),
          OrderedDict([('word', 'عکسها رو قبلا دیدی؟')])]
        Routine Rest
      LoopTerminator trials_3
    LoopTerminator blocks
  LoopTerminator conditionSelectLoop
  Routine description1
  LoopInitiator blocks_2 loopType="TrialHandler"
    Selected rows = 0,1,2
    conditionsFile = chooseBlocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.xlsx'), ('textFile', 'News.xlsx')]),
      OrderedDict([('condsFile', 'NeuBlock.xlsx'), ('textFile', 'News.xlsx')]),
      OrderedDict([('condsFile', 'PosBlock.xlsx'), ('textFile', 'News.xlsx')])]
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine Prime_a
      Routine Blank2
    LoopTerminator trials_4
    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = News.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Text', 'bad'), ('State_T', 0)]),
        OrderedDict([('Text', 'good'), ('State_T', 1)]),
        OrderedDict([('Text', 'neutral'), ('State_T', 0)]),
        OrderedDict([('Text', 'corona'), ('State_T', 1)]),
        OrderedDict([('Text', 'political'), ('State_T', 0)]),
        OrderedDict([('Text', 'sport'), ('State_T', 1)]),
        OrderedDict([('Text', 'natural'), ('State_T', 0)]),
        OrderedDict([('Text', 'disaster'), ('State_T', 1)]),
        OrderedDict([('Text', 'assaulting'), ('State_T', 0)]),
        OrderedDict([('Text', 'religious'), ('State_T', 1)]),
        OrderedDict([('Text', 'iran'), ('State_T', 0)]),
        OrderedDict([('Text', 'world'), ('State_T', 1)]),
        OrderedDict([('Text', 'pandemic'), ('State_T', 1)]),
        OrderedDict([('Text', 'murder'), ('State_T', 0)]),
        OrderedDict([('Text', 'earth'), ('State_T', 0)])]
      Routine Test_accuracy
    LoopTerminator trials_5
  LoopTerminator blocks_2
  Routine Thanks
